//   FILE :  LR_II_model_1994.xml
//
// CREATED :  28th March 2002
//
// LAST MODIFIED : 30th July 2003
//
// AUTHOR :  Catherine Lloyd
//           The Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the CellML Metadata 1.0 Specification released on 16th
// January, 2002.
//
// DESCRIPTION :  This file contains a CellML description of the mammalian
// ventricular action potential based on the Luo-Rudy II model, 1994.  This model
// is a development of the LR-I model.  In particular, the LR-II model describes
// the processes which regulate [Ca]i (intracellular Calcium concentration), and
// the movement of calcium ions through the cell and to and from the sarcoplasmic
// reticulum.
//
// CHANGES:
//   18/07/2002 - CML - Added more metadata.
//   09/04/2003 - AAC - Added publication date information.
//   05/06/2003 - CML - Fixed MathML in a few components.
//   30/07/2003 - CML - Fixed MathML in a few components.
// publisher: The University of Auckland, The Bioengineering Institute
// comment: FN James Lawson; This model contains a delay element in its mathematical description of CICR. Discrete delay elements can not yet be represented in CellML (as of CellML version 1.1) as as such, this model is non-functional.
// created: W3CDTF 2002-03-28T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: The Luo-Rudy II Model of Mammalian Ventricular Cardiac Action Potentials, 1994
// bio_entity: Ventricular Myocyte
// comment: FN Catherine Lloyd; This is the CellML description of Luo and Rudy's mathematical model of the mammalian cardiac ventricular action potential. It is a significant development on their original 1991 model. While this version of the model qualitatively compares well to the LR II paper for the action potential, the intracellular calcium dynamics have not been included correctly - namely there is no calcium-induced calcium-release (CICR) process in this version of the model. The original version of the model simulates CICR via a mechanism whereby CICR is induced if and only if the calcium accumulated in the cell in the 2 ms following (dV/dt)max exceeds a given threshold. This sort of process is a bit tricky to include in the CellML (or at least in a way that will work with the CellML abilitites of CMISS) so has been left out for now.
// reference: Pubmed_id 7514509; Given Ching-hsing; Family Luo; Given Yoram; Family Rudy; title A Dynamic Model of the Cardiac Ventricular Action Potential I. Simulations of Ionic Currents and Concentration Changes; volume 74; first_page 1071; title Circulation Research; W3CDTF 1994-06-01; last_page 1096
// reference: subject_type keyword; Ventricular Myocyte; cardiac; electrophysiology; ventricular myocyte
// species: Mammalia
// reference: Pubmed_id 7514509; Given Ching-hsing; Family Luo; Given Yoram; Family Rudy; title A Dynamic Model of the Cardiac Ventricular Action Potential I. Simulations of Ionic Currents and Concentration Changes; volume 74; first_page 1071; title Circulation Research; W3CDTF 1994-06-01; last_page 1096
// reference: subject_type keyword; cardiac; ventricular myocyte; electrophysiology
// comment: FN Catherine Lloyd; This is the CellML description of Luo and Rudy's mathematical model of the mammalian cardiac ventricular action potential. It is a significant development on their original 1991 model. While this version of the model qualitatively compares well to the LR II paper for the action potential, the intracellular calcium dynamics have not been included correctly - namely there is no calcium-induced calcium-release (CICR) process in this version of the model. The original version of the model simulates CICR via a mechanism whereby CICR is induced if and only if the calcium accumulated in the cell in the 2 ms following (dV/dt)max exceeds a given threshold. This sort of process is a bit tricky to include in the CellML (or at least in a way that will work with the CellML abilitites of CMISS) so has been left out for now.
def model luo_rudy_1994_version02 as
  // Luo-Rudy Mammalian Ventricular Model II (dynamic), 1994
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the original unchecked version of the model imported from the previous CellML model repository, 24-Jan-2006.
  //
  // Model Structure
  //
  // A subsequent pair of papers by Ching-hsing Luo and Yoram Rudy (1994a; 1994b) further developed the Luo-Rudy I 1991 model by addressing some of the issues which were not investigated in their original study. In particular, the LR-II model incorporates a more thorough description of the processes which regulate intracellular calcium ion concentration and the movement of calcium ions through the cell and to and from the sarcoplasmic reticulum (see the figure below).
  //
  // Their mathematical model of the cardiac ventricular action potential is based upon experimental data from guinea pig ventricular cells, however it provides a framework for modelling other types of ventricular cells with appropriate modifications to account for interspecific heterogeneity.
  //
  // The complete original paper reference is cited below:
  //
  // A Dynamic Model of the Cardiac Ventricular Action Potential - Simulations of Ionic Currents and Concentration Changes (http://circres.ahajournals.org/cgi/content/abstract/74/6/1071), Ching-hsing Luo and Yoram Rudy, 1994, Circulation Research (http://circres.ahajournals.org/), 74, 1071-1097. PubMed ID: 7514509 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=7514509&dopt=Abstract)
  //
  // The Luo-Rudy II ventricular model has become a classical study. Several more recent ventricular and atrial cell models have been published using the Luo-Rudy dynamic model as their foundation and building upon those equations. Since the model was published in 1994, it has been updated several times, incorporating new experimental data taken from papers written by other authors. These modifications have been taken into consideration in another CellML model (please refer to the Updated Luo-Rudy Mammalian Ventricular Model II).
  //
  // cell diagram of the LR-II model showing ionic currents, pumps and exchangers within the sarcolemma and the sarcoplasmic reticulum
  //
  // A schematic diagram describing the ionic currents, pumps and exchangers that are captured in the LR-II model. The intracellular compartment is the sarcoplasmic reticulum (SR), which is divided into the two subcompartments, the network SR (NSR) and the junctional SR (JSR). Ca2+ buffers are present in both the cytoplasm and the JSR.
  // Below, we define some additional units for association with variables and
  // constants within the model. The identifiers are fairly self-explanatory.
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit second {pref: milli, expo: -1};
  enddef;
  def unit per_mm as
    unit metre {pref: milli, expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit mV_per_ms as
    unit mV;
    unit ms {expo: -1};
  enddef;
  def unit per_mV as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_mV_ms as
    unit mV {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit mS_per_mm2 as
    unit siemens {pref: milli};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit uF_per_mm2 as
    unit farad {pref: micro};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit uA_per_mm2 as
    unit ampere {pref: micro};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: nano};
    unit metre {pref: milli, expo: -3};
  enddef;
  def unit gas_constant_units as
    unit joule {pref: pico};
    unit mole {pref: nano, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit faradays_constant_units as
    unit coulomb {pref: nano};
    unit mole {pref: nano, expo: -1};
  enddef;
  def unit mm_per_ms as
    unit metre {pref: milli};
    unit ms {expo: -1};
  enddef;
  def unit mm2 as
    unit metre {pref: milli, expo: 2};
  enddef;
  // The "environment" component is used to declare variables that are used by
  // all or most of the other components, in this case just "time".

  def comp environment as
    var time: ms {pub: out};
  enddef;

  def comp membrane as
    var V: mV {pub: out, init: -84.624};
    var R: gas_constant_units {pub: out, init: 8.3145e3};
    var T: kelvin {pub: out, init: 310.0};
    var F: faradays_constant_units {pub: out, init: 96845.0};
    var dV_dt: mV_per_ms {pub: out};
    // These variables are defined here and only used internally.
    var Cm: uF_per_mm2 {init: 0.01};
    var I_st: uA_per_mm2;
    // These variables are imported from other components.
    var time: ms {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_Ca_L: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_Kp: uA_per_mm2 {pub: in};
    var i_p_Ca: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_ns_Ca: uA_per_mm2 {pub: in};
    // The membrane voltage (V) is calculated as an ordinary
    // differential equation in terms of the currents.
    dV_dt = (I_st-(i_Na+i_Ca_L+i_K+i_K1+i_Kp+i_NaCa+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_ns_Ca))/Cm;
    ode(V, time) = dV_dt;
    var IStimC: uA_per_mm2 {pub: out};
    IStimC = I_st;
  enddef;

  def comp fast_sodium_current as
    var i_Na: uA_per_mm2 {pub: out};
    var E_Na: mV {pub: out};
    var g_Na: mS_per_mm2 {init: 0.16};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var R: gas_constant_units {pub: in};
    var F: faradays_constant_units {pub: in};
    var T: kelvin {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*j*(V-E_Na);
    E_Na = R*T/F*ln(Nao/Nai);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {pub: out, init: 0.0};
    var alpha_m: per_ms;
    var beta_m: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_m = 0.32{per_mV_ms}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    beta_m = 0.08{per_ms}*exp(-V/11.0{mV});
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {pub: out, init: 1.0};
    var alpha_h: per_ms;
    var beta_h: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_h = sel
      case V < -40.0{mV}:
        0.135{per_ms}*exp((80.0{mV}+V)/(-6.8{mV}));
      otherwise:
        0.0{per_ms};
    endsel;
    beta_h = sel
      case V < -40.0{mV}:
        3.56{per_ms}*exp(0.079{mV}*V)+310000.0{per_ms}*exp(0.35{per_mV}*V);
      otherwise:
        1.0{dimensionless}/(0.13{ms}*(1.0{dimensionless}+exp((V+10.66{mV})/(-11.1{mV}))));
    endsel;
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var j: dimensionless {pub: out, init: 1.0};
    var alpha_j: per_ms;
    var beta_j: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_j = sel
      case V < -40.0{mV}:
        (-127140.0{per_mV_ms}*exp(0.2444{per_mV}*V)-0.00003474{per_mV_ms}*exp(-0.04391{per_mV}*V))*((V+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV}))));
      otherwise:
        0.0{per_ms};
    endsel;
    beta_j = sel
      case V < -40.0{mV}:
        0.1212{per_ms}*exp(-0.01052{per_mV}*V)/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
      otherwise:
        0.3{per_ms}*exp(-0.0000002535{per_mV}*V)/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV})));
    endsel;
    ode(j, time) = alpha_j*(1.0{dimensionless}-j)-beta_j*j;
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L: uA_per_mm2 {pub: out};
    var i_CaCa: uA_per_mm2 {pub: out};
    var i_CaK: uA_per_mm2 {pub: out};
    var i_CaNa: uA_per_mm2 {pub: out};
    var gamma_Nai: dimensionless {pub: out, init: 0.75};
    var gamma_Nao: dimensionless {pub: out, init: 0.75};
    var gamma_Ki: dimensionless {pub: out, init: 0.75};
    var gamma_Ko: dimensionless {pub: out, init: 0.75};
    var I_CaCa: uA_per_mm2;
    var I_CaK: uA_per_mm2;
    var I_CaNa: uA_per_mm2;
    var P_Ca: mm_per_ms {init: 5.4e-6};
    var P_Na: mm_per_ms {init: 6.75e-9};
    var P_K: mm_per_ms {init: 1.93e-9};
    var gamma_Cai: dimensionless {init: 1.0};
    var gamma_Cao: dimensionless {init: 0.34};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Cai: mM {pub: in, priv: out};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cao: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Ki: mM {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    i_CaCa = d*f*f_Ca*I_CaCa;
    i_CaNa = d*f*f_Ca*I_CaNa;
    i_CaK = d*f*f_Ca*I_CaK;
    I_CaCa = P_Ca*sqr(2.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Cai*Cai*exp(2.0{dimensionless}*V*F/(R*T))-gamma_Cao*Cao)/(exp(2.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    I_CaNa = P_Na*sqr(1.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Nai*Nai*exp(1.0{dimensionless}*V*F/(R*T))-gamma_Nao*Nao)/(exp(1.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    I_CaK = P_K*sqr(1.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Ki*Ki*exp(1.0{dimensionless}*V*F/(R*T))-gamma_Ko*Ko)/(exp(1.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    i_Ca_L = i_CaCa+i_CaK+i_CaNa;
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {pub: out, init: 0.0};
    var alpha_d: per_ms;
    var beta_d: per_ms;
    var d_infinity: dimensionless;
    var tau_d: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_d = d_infinity/tau_d;
    d_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-((V+10.0{mV})/6.24{mV})));
    tau_d = d_infinity*((1.0{dimensionless}-exp(-((V+10.0{mV})/6.24{mV})))/(0.035{per_mV_ms}*(V+10.0{mV})));
    beta_d = (1.0{dimensionless}-d_infinity)/tau_d;
    ode(d, time) = alpha_d*(1.0{dimensionless}-d)-beta_d*d;
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {pub: out, init: 1.0};
    var alpha_f: per_ms;
    var beta_f: per_ms;
    var f_infinity: dimensionless;
    var tau_f: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_f = f_infinity/tau_f;
    f_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+35.06{mV})/8.6{mV}))+0.6{dimensionless}/(1.0{dimensionless}+exp((50.0{mV}-V)/20.0{mV}));
    tau_f = 1.0{ms}/(0.0197{dimensionless}*exp(-sqr(0.0337{per_mV}*(V+10.0{mV})))+0.02{dimensionless});
    beta_f = (1.0{dimensionless}-f_infinity)/tau_f;
    ode(f, time) = alpha_f*(1.0{dimensionless}-f)-beta_f*f;
  enddef;

  def comp L_type_Ca_channel_f_Ca_gate as
    var f_Ca: dimensionless {pub: out};
    var Km_Ca: mM {init: 0.6e-3};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    f_Ca = 1.0{dimensionless}/(1.0{dimensionless}+sqr(Cai/Km_Ca));
  enddef;

  def comp time_dependent_potassium_current as
    var i_K: uA_per_mm2 {pub: out};
    var g_K_max: mS_per_mm2 {init: 2.82e-3};
    var g_K: mS_per_mm2;
    var E_K: mV;
    var PR_NaK: dimensionless {init: 0.01833};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var Nao: mM {pub: in};
    var Nai: mM {pub: in};
    var X: dimensionless {priv: in};
    var Xi: dimensionless {priv: in};
    g_K = g_K_max*sqrt(Ko/5.4{mM});
    E_K = R*T/F*ln((Ko+PR_NaK*Nao)/(Ki+PR_NaK*Nai));
    i_K = g_K*sqr(X)*Xi*(V-E_K);
  enddef;

  def comp time_dependent_potassium_current_X_gate as
    var X: dimensionless {pub: out, init: 0.0};
    var alpha_X: per_ms;
    var beta_X: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_X = 0.0000719{per_mV_ms}*(V+30.0{mV})/(1.0{dimensionless}-exp(-0.148{dimensionless}*(V+30.0{mV})));
    beta_X = 0.000131{per_mV_ms}*(V+30.0{mV})/(-1.0{dimensionless}+exp(0.0687{dimensionless}*(V+30.0{mV})));
    ode(X, time) = alpha_X*(1.0{dimensionless}-X)-beta_X*X;
  enddef;

  def comp time_dependent_potassium_current_Xi_gate as
    var Xi: dimensionless {pub: out};
    var V: mV {pub: in};
    var time: ms {pub: in};
    Xi = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-56.26{mV})/32.1{mV}));
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: uA_per_mm2 {pub: out};
    var E_K1: mV {pub: out, priv: out};
    var g_K1_max: mS_per_mm2 {init: 7.5e-3};
    var g_K1: mS_per_mm2;
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var K1_infinity: dimensionless {priv: in};
    g_K1 = g_K1_max*sqrt(Ko/5.4{mM});
    E_K1 = R*T/F*ln(Ko/Ki);
    i_K1 = g_K1*K1_infinity*(V-E_K1);
  enddef;

  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_ms;
    var beta_K1: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    var E_K1: mV {pub: in};
    alpha_K1 = 1.02{per_ms}/(1.0{dimensionless}+exp(0.2385{per_mV}*(V-E_K1-59.215{mV})));
    beta_K1 = (0.49124{per_ms}*exp(0.08032{dimensionless}*(V+5.476{mV}-E_K1))+exp(0.06175{dimensionless}*(V-(E_K1+594.31{mV}))))/(1.0{dimensionless}+exp(-0.5143{per_mV}*(V-E_K1+4.753{mV})));
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  def comp plateau_potassium_current as
    var i_Kp: uA_per_mm2 {pub: out};
    var E_Kp: mV;
    var g_Kp: mS_per_mm2 {init: 1.83e-4};
    var Kp: dimensionless;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_K1: mV {pub: in};
    E_Kp = E_K1;
    Kp = 1.0{dimensionless}/(1.0{dimensionless}+exp((7.488{mV}-V)/5.98{mV}));
    i_Kp = g_Kp*Kp*(V-E_Kp);
  enddef;

  def comp sarcolemmal_calcium_pump as
    var i_p_Ca: uA_per_mm2 {pub: out};
    var K_mpCa: mM {init: 0.5e-3};
    var I_pCa: uA_per_mm2 {init: 1.15e-2};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    i_p_Ca = I_pCa*(Cai/(K_mpCa+Cai));
  enddef;

  def comp sodium_background_current as
    var i_Na_b: uA_per_mm2 {pub: out};
    var g_Nab: mS_per_mm2 {init: 1.41e-5};
    var E_NaN: mV;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_Na: mV {pub: in};
    E_NaN = E_Na;
    i_Na_b = g_Nab*(V-E_NaN);
  enddef;

  def comp calcium_background_current as
    var i_Ca_b: uA_per_mm2 {pub: out};
    var g_Cab: mS_per_mm2 {init: 3.016e-5};
    var E_CaN: mV;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    E_CaN = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_CaN);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: uA_per_mm2 {pub: out};
    var I_NaK: uA_per_mm2 {init: 1.5e-2};
    var f_NaK: dimensionless;
    var K_mNai: mM {init: 10.0};
    var K_mKo: mM {init: 1.5};
    var sigma: dimensionless;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*(V*F/(R*T)))+0.0365{dimensionless}*sigma*exp(-(V*F/(R*T))));
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Nao/67.3{dimensionless})-1.0{dimensionless});
    i_NaK = I_NaK*f_NaK*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_mNai/Nai, 1.5{dimensionless})))*(Ko/(Ko+K_mKo));
  enddef;

  def comp non_specific_calcium_activated_current as
    var i_ns_Ca: uA_per_mm2 {pub: out};
    var i_ns_Na: uA_per_mm2 {pub: out};
    var i_ns_K: uA_per_mm2 {pub: out};
    var P_ns_Ca: mm_per_ms {init: 1.75e-9};
    var gamma_Nai: dimensionless {pub: in};
    var gamma_Nao: dimensionless {pub: in};
    var gamma_Ki: dimensionless {pub: in};
    var gamma_Ko: dimensionless {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cao: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Ki: mM {pub: in};
    var I_ns_Na: uA_per_mm2;
    var I_ns_K: uA_per_mm2;
    var K_m_ns_Ca: mM {init: 1.2e-3};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    var V: mV {pub: in};
    var Vns: mV;
    var EnsCa: mV;
    EnsCa = R*T/F*ln((Ko+Nao)/(Ki+Nai));
    Vns = V-EnsCa;
    i_ns_Na = I_ns_Na*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_m_ns_Ca/Cai, 3.0{dimensionless})));
    i_ns_K = I_ns_K*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_m_ns_Ca/Cai, 3.0{dimensionless})));
    i_ns_Ca = i_ns_Na+i_ns_K;
    I_ns_Na = P_ns_Ca*sqr(1.0{dimensionless})*(Vns*sqr(F)/(R*T))*((gamma_Nai*Nai*exp(1.0{dimensionless}*Vns*F/(R*T))-gamma_Nao*Nao)/(exp(1.0{dimensionless}*Vns*F/(R*T))-1.0{dimensionless}));
    I_ns_K = P_ns_Ca*sqr(1.0{dimensionless})*(Vns*sqr(F)/(R*T))*((gamma_Ki*Ki*exp(1.0{dimensionless}*Vns*F/(R*T))-gamma_Ko*Ko)/(exp(1.0{dimensionless}*Vns*F/(R*T))-1.0{dimensionless}));
  enddef;

  def comp Na_Ca_exchanger as
    var i_NaCa: uA_per_mm2 {pub: out};
    var K_NaCa: uA_per_mm2 {init: 20.0};
    var K_mNa: mM {init: 87.5};
    var K_mCa: mM {init: 1.38};
    var K_sat: dimensionless {init: 0.1};
    var eta: dimensionless {init: 0.35};
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    i_NaCa = K_NaCa*(1.0{dimensionless}/(pow(K_mNa, 3.0{dimensionless})+pow(Nao, 3.0{dimensionless})))*(1.0{dimensionless}/(K_mCa+Cao))*(1.0{dimensionless}/(1.0{dimensionless}+K_sat*exp((eta-1.0{dimensionless})*V*(F/(R*T)))))*(exp(eta*V*(F/(R*T)))*pow(Nai, 3.0{dimensionless})*Cao-exp((eta-1.0{dimensionless})*V*(F/(R*T)))*pow(Nao, 3.0{dimensionless})*Cai);
  enddef;

  def comp calcium_fluxes_in_the_SR as
    var i_rel: mM_per_ms {pub: out};
    var i_up: mM_per_ms {pub: out};
    var i_leak: mM_per_ms {pub: out};
    var i_tr: mM_per_ms {pub: out};
    var G_rel: per_ms;
    var G_rel_peak: per_ms;
    var G_rel_max: per_ms {init: 60.0};
    var tau_on: ms {init: 2.0};
    var tau_off: ms {init: 2.0};
    var t_CICR: ms;
    var tau_tr: ms {init: 180.0};
    var K_mrel: mM {init: 0.8e-3};
    var K_mup: mM {init: 0.92e-3};
    var K_leak: per_ms;
    var I_up: mM_per_ms {init: 0.005};
    var Ca_NSR_max: mM {init: 15.0};
    var delta_Ca_i2: mM;
    var delta_Ca_ith: mM {init: 0.18e-3};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    var Ca_JSR: mM {pub: in};
    var Ca_NSR: mM {pub: in};
    i_rel = G_rel*(Ca_JSR-Cai);
    G_rel = G_rel_peak*((delta_Ca_i2-delta_Ca_ith)/(K_mrel+delta_Ca_i2-delta_Ca_ith))*(1.0{dimensionless}-exp(-(t_CICR/tau_on)))*exp(-(t_CICR/tau_off));
    G_rel_peak = sel
      case delta_Ca_i2 < delta_Ca_ith:
        0.0{per_ms};
      otherwise:
        G_rel_max;
    endsel;
    i_up = I_up*(Cai/(Cai+K_mup));
    i_leak = K_leak*Ca_NSR;
    K_leak = I_up/Ca_NSR_max;
    i_tr = (Ca_NSR-Ca_JSR)/tau_tr;
  enddef;

  def comp ionic_concentrations as
    var Nai: mM {pub: out, init: 10.0};
    var Nao: mM {pub: out, init: 140.0};
    var Cai: mM {pub: out, init: 0.12e-3};
    var Cao: mM {pub: out, init: 1.8};
    var Ki: mM {pub: out, init: 145.0};
    var Ko: mM {pub: out, init: 5.4};
    var Ca_JSR: mM {pub: out, init: 1.8};
    var Ca_NSR: mM {pub: out, init: 1.8};
    var Am: per_mm {init: 200};
    // volume fractions
    var V_myo: dimensionless {init: 0.68};
    var V_JSR: dimensionless {init: 0.0048};
    var V_NSR: dimensionless {init: 0.0552};
    var time: ms {pub: in};
    var F: faradays_constant_units {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_CaNa: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_ns_Na: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_CaCa: uA_per_mm2 {pub: in};
    var i_CaK: uA_per_mm2 {pub: in};
    var i_p_Ca: uA_per_mm2 {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_Kp: uA_per_mm2 {pub: in};
    var i_ns_K: uA_per_mm2 {pub: in};
    var i_tr: mM_per_ms {pub: in};
    var i_rel: mM_per_ms {pub: in};
    var i_leak: mM_per_ms {pub: in};
    var i_up: mM_per_ms {pub: in};
    ode(Nai, time) = -(i_Na+i_CaNa+i_Na_b+i_ns_Na+i_NaCa*3.0{dimensionless}+i_NaK*3.0{dimensionless})*(Am/(V_myo*F));
    ode(Cai, time) = -(i_CaCa+i_p_Ca+i_Ca_b-i_NaCa)*(Am/(2.0{dimensionless}*V_myo*F))+i_rel*(V_JSR/V_myo)+(i_leak-i_up)*(V_NSR/V_myo);
    ode(Ki, time) = -(i_CaK+i_K+i_K1+i_Kp+i_ns_K+(-(i_NaK*2.0{dimensionless})))*(Am/(V_myo*F));
    ode(Ca_JSR, time) = -(i_rel-i_tr*(V_NSR/V_JSR));
    ode(Ca_NSR, time) = -(i_leak+i_tr-i_up);
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
        comp L_type_Ca_channel_f_Ca_gate;
      endcomp;
      comp time_dependent_potassium_current incl
        comp time_dependent_potassium_current_X_gate;
        comp time_dependent_potassium_current_Xi_gate;
      endcomp;
      comp time_independent_potassium_current incl
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      comp Na_Ca_exchanger;
      comp plateau_potassium_current;
      comp sarcolemmal_calcium_pump;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_potassium_pump;
      comp non_specific_calcium_activated_current;
      comp ionic_concentrations;
      comp calcium_fluxes_in_the_SR;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f_Ca_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_X_gate;
      comp time_dependent_potassium_current_Xi_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between non_specific_calcium_activated_current and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between calcium_fluxes_in_the_SR and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_dependent_potassium_current for
    vars V and V;
    vars i_K and i_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and non_specific_calcium_activated_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_ns_Ca and i_ns_Ca;
  enddef;
  def map between membrane and ionic_concentrations for
    vars F and F;
  enddef;
  def map between fast_sodium_current and ionic_concentrations for
    vars i_Na and i_Na;
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_CaCa and i_CaCa;
    vars i_CaNa and i_CaNa;
    vars i_CaK and i_CaK;
  enddef;
  def map between time_dependent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nao and Nao;
    vars Nai and Nai;
    vars i_K and i_K;
  enddef;
  def map between Na_Ca_exchanger and ionic_concentrations for
    vars Cai and Cai;
    vars Nai and Nai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between plateau_potassium_current and time_independent_potassium_current for
    vars E_K1 and E_K1;
  enddef;
  def map between plateau_potassium_current and ionic_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between sarcolemmal_calcium_pump and ionic_concentrations for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between sodium_background_current and ionic_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between non_specific_calcium_activated_current and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_ns_Na and i_ns_Na;
    vars i_ns_K and i_ns_K;
  enddef;
  def map between calcium_fluxes_in_the_SR and ionic_concentrations for
    vars i_rel and i_rel;
    vars i_tr and i_tr;
    vars i_leak and i_leak;
    vars i_up and i_up;
    vars Cai and Cai;
    vars Ca_JSR and Ca_JSR;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between L_type_Ca_channel and non_specific_calcium_activated_current for
    vars gamma_Nao and gamma_Nao;
    vars gamma_Nai and gamma_Nai;
    vars gamma_Ko and gamma_Ko;
    vars gamma_Ki and gamma_Ki;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars Cai and Cai;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_X_gate for
    vars X and X;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_Xi_gate for
    vars Xi and Xi;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars K1_infinity and K1_infinity;
    vars E_K1 and E_K1;
    vars time and time;
    vars V and V;
  enddef;
enddef;
// cellml://cellml#E_NaN_calculation_eq
// comment: The reversal potential for the channel.
// rdf:#eeea0bfd-f962-49f4-90aa-560d9b2ff5aa
// value: The conductance for the channel.
// cellml://cellml#calcium_NSR_diff_eq
// comment: The change in calcium concentration in the network sarcoplasmic reticulum.
// cellml://cellml#L_type_Ca_channel_f_Ca_gate
// comment: The calcium-dependent inactivation gate for the L-type calcium channel - the fCa gate.
// rdf:#860e71ac-2d5e-45cc-a9e8-40a1ebc340fe
// value: The channel reversal potential.
// cellml://cellml#I_CaK_calculation_eq
// comment: The maximum potassium component of the total L-type channel current.
// rdf:#111cbb8c-9173-42a2-9b70-d7e7ef9d2e1a
// value: The time-dependent potassium reploarisation current.
// rdf:#53493837-f9f6-4536-b2e1-bf2ea45f0690
// value: The kinetics of the d gate.
// rdf:#31113158-c092-4a36-af97-8db775f63e7d
// value: The opening rate for the h gate.
// cellml://cellml#beta_K1_calculation_eq
// comment: The closing rate for the K1 gate.
// cellml://cellml#membrane_voltage_diff_eq
// comment: Assign the rate of change of potential for the differential equation.
// cellml://cellml#dj_dt_eq
// comment: The kinetics of for the j gate.
// rdf:#acea15f8-7896-42b4-a9c8-1424fe3a72e5
// value: This is a dummy equation that we simply use to make grabbing the value in CMISS much easier.
// rdf:#31486372-d1dc-4d54-972c-c71117a32e52
// value: The closing rate of the f gate.
// rdf:#286fd670-6f28-4e62-8fa3-4951ff063dc9
// value: Component grouping together the differential equations for the various ionic concentrations that the model tracks.
// cellml://cellml#I_CaNa_calculation_eq
// comment: The maximum sodium component of the total L-type channel current.
// cellml://cellml#i_Ca_L_calculation_eq
// comment: The total current of the L-type channel current.
// rdf:#13c03188-2ea0-42e6-b3c0-facf6d220ace
// value: The calcium pump current.
// rdf:#8f34572e-b813-455a-8370-a4c302d20c12
// ORG: Orgname The University of Auckland; Orgunit The Bioengineering Institute
// EMAIL: c.lloyd@auckland.ac.nz
// N: Given Catherine; Family Lloyd; Other May
// rdf:#1c98d94a-c7a7-4075-99c8-b40d62dc9c71
// value: The steady-state kinetics of the K1 gate.
// cellml://cellml#time_dependent_potassium_current
// rdf:#11db82ba-aadc-4708-a32a-3af86fd666a9
// value: The maximum sodium component of the channel's current.
// rdf:#58ac972c-67fa-4760-8dd0-25e3774cc6b9
// value: The potassium current active at plateau potentials.
// rdf:#ef1a7209-efdd-4c03-a2db-afc401ad754e
// value: Calculation of the current.
// cellml://cellml#time_independent_potassium_current
// comment: The time-independent potassium repolarisation current.
// rdf:#9845ea23-14d8-4e82-93a4-d57bad1885df
// value: The change in intracellular calcium concentration.
// cellml://cellml#calcium_fluxes_in_the_SR
// comment: The various calcium fluxes into and from the sarcoplasmic reticulum.
// rdf:#6cc8d6e1-e5ee-4fa4-8eb2-d0cfd3297cbe
// value: The background sodium current.
// cellml://cellml#beta_m_calculation_eq
// comment: The closing rate for the m gate.
// cellml://cellml#time_dependent_potassium_current_X_gate
// comment: The time-dependent activation gate for the time-dependent potassium current - the X gate.
// cellml://cellml#membrane
// comment: The main component for the model, contains all ionic currents and defines the transmembrane potential.
// cellml://cellml#f_Ca_calculation_eq
// comment: The kinetics of the fCa gate.
// rdf:#e3b59417-3a58-4c54-8ac2-4f3ace00863b
// value: The opening rate for the K1 gate.
// rdf:#76a4e258-e129-4500-aaca-899a952d7532
// value: The background calcium current.
// rdf:#8c799ef3-8524-4d3c-b034-02521d109e44
// Given: Catherine
// Family: Lloyd
// Other: May
// rdf:#8905761e-5adb-4bad-bde8-40ac702a9e82
// value: The kinetics of the h gate.
// rdf:#47f37758-7bc6-485f-8a2f-3b30c2b18ad5
// value: Calculation of the channel conductance.
// cellml://cellml#alpha_h_calculation_eq
// cellml://cellml#i_Na_calculation_eq
// comment: Calculation of the fast sodium current.
// cellml://cellml#E_Kp_calculation_eq
// comment: The reversal potential for the channel.
// rdf:#2cf60e99-7a37-4381-8053-6ce89db98df3
// value: We need to use dV/dt in the calulation of calcium-induced calcium-release, so we make it accessible here.
// rdf:#87a92d7c-0058-4baf-b791-0450ebf7b58a
// value: The reversal potential for the channel.
// cellml://cellml#L_type_Ca_channel_f_gate
// comment: The voltage-dependent inactivation gate for the L-type calcium channel - the f gate.
// cellml://cellml#K1_infinity_calculation_eq
// cellml://cellml#alpha_X_calculation_eq
// comment: The opening rate for the X gate.
// cellml://cellml#sodium_potassium_pump
// comment: The sodium/potassium exchanger current which extrudes three sodium ions from the cell in exchange for two potassium ions entering the cell.
// rdf:#47017c89-3625-4d2c-83a0-4beb85a60991
// value: The closing rate for the h gate.
// cellml://cellml#dh_dt_eq
// cellml://cellml#E_K_calculation_eq
// comment: The reversal potential of the channel.
// cellml://cellml#i_leak_calculation_eq
// comment: Calcium leak flux from the network sarcoplasmic reticulum into the cytosol.
// rdf:#f21980b4-b4fe-4b55-b51a-4848904f7cc1
// value: The voltage-dependent slow inactivation gate for the fast sodium channel - the j gate.
// rdf:#8da7daa7-8b4f-4d33-a5d5-0a2c1c2cd177
// value: The kinetics of the X gate.
// rdf:#60f5de3b-a543-42b2-b867-a60ca08189d7
// value: The change in intracellular sodium concentration.
// cellml://cellml#alpha_f_calculation_eq
// comment: The opening rate of the f gate.
// rdf:#fd6ed334-98de-4f5d-869d-34b78004ae8c
// value: The voltage-dependent inactivation gate for the fast sodium channel - the h gate.
// rdf:#b5770b23-e0d6-4651-b301-346789ff2487
// value: Calculation of the exchanger current.
// rdf:#da5c047d-5ff3-4b4e-9094-288d3fe1e33f
// value: The voltage-dependent activation gate for the L-type calcium channel - the d gate.
// rdf:#4259f9af-a657-48bc-9e88-37d186943043
// modified: W3CDTF 2003-06-05
// value: Fixed maths: alpha_J_calculation in fast_sodium_current_j_gate, beta_K1_calculation in time_independent_potassium_current_K1_gate, and i_NaK_calculation in sodium_potassium_pump.
// cellml://cellml#i_Na_b_calculation_eq
// comment: Calculation of the current.
// cellml://cellml#i_CaCa_calculation_eq
// comment: The calcium component of the total L-type channel current.
// rdf:#976183a8-493e-450f-be70-79434284c49e
// value: The potassium component of the total L-type channel current.
// rdf:#cfed257d-2438-487f-bb26-32007b0a0c0a
// value: The release flux from the junctional sarcoplasmic reticulum into the cytosol.
// rdf:#3a6533b9-0f33-426a-8db1-098aa4ad0b57
// value: The potassium component of the channel's current.
// rdf:#d82cd9a6-2d48-4037-9b4e-0a28b67a6a5e
// value: The kinetics of the Xi gate.
// rdf:#39e0edc2-396f-45b0-9183-a47833a14cfd
// value: The gating variable for the time-independent potassium current - the K1 gate.
// cellml://cellml#Na_Ca_exchanger_eq
// comment: Calculation of the exchanger current.
// rdf:#a5c00cfc-0944-4520-912f-97cf98a40559
// W3CDTF: 2002-03-28
// rdf:#b24b01df-79b2-4688-9b1a-6afaf16c3f68
// value: The kinetics of the m gate.
// cellml://cellml#I_ns_Na_calculation_eq
// cellml://cellml#i_K1_calculation_eq
// comment: Calculation of the channel current.
// cellml://cellml#I_CaCa_calculation_eq
// comment: The maximum calcium component of the total L-type channel current.
// cellml://cellml#EnsCa_calculation_eq
// cellml://cellml#sodium_diff_eq
// rdf:#a0fb41c6-024b-4adb-9bb9-9a86fcfbe740
// value: Calculation of the current.
// rdf:#fda547bd-f935-468c-b90e-b8411713034c
// value: Calculation of the release channel conductance. This is incorrect as there is no CICR induced via the accumulation of calcium in the cytosol in the period following max(dV/dt)
// cellml://cellml#E_K1_calculation_eq
// comment: Calculation of the channel reversal potential.
// cellml://cellml#time_dependent_potassium_current_Xi_gate
// comment: The time-independent inactivation gate for the time-dependent potassium current - the Xi gate.
// cellml://cellml#i_Kp_calculation_eq
// comment: Calculation of the current.
// cellml://cellml#i_CaK_calculation_eq
// cellml://cellml#Kp_calculation_eq
// comment: The gating kinetics for the channel.
// cellml://cellml#i_NaK_calculation_eq
// cellml://cellml#alpha_j_calculation_eq
// comment: The opening rate for the j gate.
// cellml://cellml#g_K_calculation_eq
// cellml://cellml#dd_dt_eq
// rdf:#dcf4b094-5f49-4f18-844a-6542dc314118
// value: The kinetics of the f gate.
// rdf:#1e3f89aa-bd17-4569-875f-82d9f7fd4bab
// value: The closing rate for the X gate.
// cellml://cellml#i_tr_calculation_eq
// comment: Translocation flux from the network to the junctional sarcoplasmic reticulum.
// rdf:#b93c8b21-d95e-4b2b-b211-94bc4ac4e74b
// modified: W3CDTF 2003-07-30
// value: Fixed maths.
// modifier: Given Catherine; Family Lloyd; Other May
// cellml://cellml#fast_sodium_current_h_gate
// rdf:#ba39ae91-30f3-494b-aba9-ec5199d2e9d2
// value: The L-type calcium channel. Primarily a calcium specific channel, but with small potassium and sodium components, activated at plateau potentials.
// rdf:#7e3e20b1-2812-44d7-af86-cc1b02c8dc88
// value: The closing rate of the d gate.
// cellml://cellml#ionic_concentrations
// cellml://cellml#i_ns_Na_calculation_eq
// comment: The sodium component of the channel's current.
// cellml://cellml#E_Na_calculation_eq
// comment: Calculation of reversal potential for the fast sodium channel.
// cellml://cellml#i_ns_K_calculation_eq
// cellml://cellml#sodium_background_current
// rdf:#11405b4e-4614-4f56-aaf9-b2bf0029ad2b
// value: The change in intracellular potassium concentration.
// rdf:#a62cff51-2a07-4dc8-bf52-072b950d2c45
// value: The fast sodium current is primarily responsible for the upstroke of the action potential.
// cellml://cellml#beta_d_calculation_eq
// cellml://cellml#non_specific_calcium_activated_current
// comment: A non-specific calcium activated channel - assumed impermeable to calcium ions but permeable to sodium and potassium ions.
// rdf:#c11aa70d-eb7a-43cd-98d8-92aaf242d822
// value: The sodium-calcium exchanger current, exchanges three sodium ions for one calcium ion.
// cellml://cellml#fast_sodium_current_j_gate
// cellml://cellml#I_ns_K_calculation_eq
// comment: The maximum potassium component of the channel's current.
// cellml://cellml#alpha_m_calculation_eq
// comment: The opening rate for the m gate.
// cellml://cellml#fast_sodium_current_m_gate
// comment: The voltage-dependent activation gate for the fast sodium channel - the m gate.
// cellml://cellml#E_CaN_calculation_eq
// cellml://cellml#dV_dt_eq
// cellml://cellml#fast_sodium_current
// cellml://cellml#G_rel_calculation_eq
// cellml://cellml#i_up_calculation_eq
// comment: The uptake flux into the sarcoplasmic reticulum from the cytosol.
// cellml://cellml#plateau_potassium_current
// cellml://cellml#potassium_internal_diff_eq
// cellml://cellml
// publisher: The University of Auckland, The Bioengineering Institute
// cellml://cellml#i_Ca_b_calculation_eq
// cellml://cellml#beta_h_calculation_eq
// cellml://cellml#Xi_calculation_eq
// cellml://cellml#sarcolemmal_calcium_pump
// comment: A calcium pump for removal of calcium from the cytosol to the extracellular space.
// cellml://cellml#beta_X_calculation_eq
// cellml://cellml#calcium_internal_diff_eq
// cellml://cellml#beta_j_calculation_eq
// comment: The closing rate for the j gate.
// cellml://cellml#i_ns_Ca_calculation_eq
// comment: The total current through the channel.
// cellml://cellml#df_dt_eq
// cellml://cellml#i_K_calculation_eq
// cellml://cellml#beta_f_calculation_eq
// cellml://cellml#i_CaNa_calculation_eq
// comment: The sodium component of the total L-type channel current.
// cellml://cellml#dX_dt_eq
// cellml://cellml#calcium_JSR_diff_eq
// comment: The change in calcium concentration in the junctional sarcoplasmic reticulum.
// cellml://cellml#g_K1_calculation_eq
// cellml://cellml#L_type_Ca_channel_d_gate
// cellml://cellml#i_rel_calculation_eq
// cellml://cellml#L_type_Ca_channel
// cellml://cellml#time_independent_potassium_current_K1_gate
// cellml://cellml#i_p_Ca_calculation_eq
// cellml://cellml#dm_dt_eq
// cellml://cellml#alpha_d_calculation_eq
// comment: The opening rate of the d gate.
// cellml://cellml#calcium_background_current
// cellml://cellml#alpha_K1_calculation_eq
// cellml://cellml#Na_Ca_exchanger
// cellml://cellml#IStim_for_cmiss_eq
